PsychoPy2experiment version="2023.2.3"
Settings
  Completed URL = https://app.prolific.com/submissions/complete?cc=C1FFK2YT
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['b_positive.xlsx', 'mathys.xlsx', 'mathys_2.xlsx', 'PANAS.xlsx', 'training_stims.xlsx', 'v_positive.xlsx', 'stim_files/stims_1.xlsx', 'stim_files/stims_2.xlsx', 'stim_files/stims_3.xlsx', 'stim_files/stims_4.xlsx', 'stim_files/stims_5.xlsx', 'resources/006_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/006_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/006_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/006_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/006_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/006_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/010_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/010_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/010_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/010_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/010_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/010_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/013_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/013_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/013_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/013_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/013_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/013_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/028_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/028_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/028_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/028_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/028_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/028_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/031_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/031_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/031_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/031_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/031_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/031_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/037_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/037_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/037_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/037_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/037_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/037_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/049_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/049_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/049_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/049_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/049_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/049_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/054_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/054_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/054_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/054_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/054_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/054_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/057_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/057_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/057_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/057_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/057_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/057_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/063_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/063_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/063_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/063_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/063_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/063_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/089_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/089_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/089_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/089_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/089_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/089_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/090_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/090_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/090_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/090_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/090_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/090_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/098_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/098_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/098_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/098_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/098_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/098_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/099_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/099_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/099_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/099_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/099_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/099_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/105_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/105_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/105_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/105_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/105_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/105_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/109_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/109_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/109_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/109_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/109_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/109_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/114_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/114_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/114_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/114_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/114_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/114_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/115_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/115_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/115_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/115_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/115_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/115_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/134_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/134_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/134_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/134_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/134_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/134_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/147_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/147_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/147_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/147_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/147_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/147_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/152_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/152_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/152_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/152_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/152_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/152_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/153_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/153_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/153_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/153_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/153_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/153_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/162_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/162_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/162_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/162_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/162_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/162_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/167_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/167_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/167_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/167_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/167_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/167_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/173_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/173_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/173_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/173_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/173_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/173_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/182_happy_BFS_9.2cpi_passe_bas_LUM.png', 'resources/182_happy_HFS_27.6cpi_passe_haut_LUM.png', 'resources/182_morph_BFS_9.2cpi_passe_bas_LUM.png', 'resources/182_morph_HFS_27.6cpi_passe_haut_LUM.png', 'resources/182_sad_BFS_9.2cpi_passe_bas_LUM.png', 'resources/182_sad_HFS_27.6cpi_passe_haut_LUM.png', 'resources/mask.png', 'resources/picConsent1.png', 'resources/picConsent2.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = online_frequencies_v2
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Certitude ?
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    KeyboardComponent key_resp
      allowedKeys = 's','d','f','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome_screen
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    TextComponent text_welcome
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Bonjour et bienvenue !

        Appuyez sur la touche (Espace) pour continuer
    KeyboardComponent key_press_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
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    CodeComponent pick_file
      Code Type = Auto->JS
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      Begin Experiment:
        list_number = [1,2,3,4,5]
        shuffle(list_number)
        randomNumber = list_number[0]

        dict_stim = {1:'stim_files/stims_1.xlsx',
        2:'stim_files/stims_2.xlsx',3:'stim_files/stims_3.xlsx',
        4:'stim_files/stims_4.xlsx',5:'stim_files/stims_5.xlsx'}

        stim_main = dict_stim[randomNumber]

        thisExp.addData('stim_file',randomNumber)
  Routine check_fr
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    TextComponent text_22
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Avant de commencer, nous allons vérifier le taux de rafraichissement de votre écran. S'il est inférieur à 57 Hz ou supérieur à 63 Hz, nous vous demanderons de quitter l'expérience en cliquant deux fois sur la touche (Echap).

        Appuyez sur la touche (Espace) pour continuer
    KeyboardComponent key_resp_30
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stop_fr
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    TextComponent text_23
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Le taux de rafraichissement de votre écran (Hz) est de :
      wrapWidth = 1.3
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    TextComponent text_24
      letterHeight = 0.05
      startVal [time (s)] = 1
      text [set every repeat] = $frame_rate
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    TextComponent text_26
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 3
      text [set every repeat] = $leave_or_stay
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    KeyboardComponent key_resp_32
      allowedKeys [set every repeat] = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        frame_rate = win.getActualFrameRate()

        if (frame_rate < 57 or frame_rate > 63):
            leave_or_stay = "Veuillez quitter l'expérience en cliquant deux fois sur la touche Echap et fermer la fenêtre."
        else:
            leave_or_stay = "Vous pouvez donc continuer en appuyant sur la touche (p)"
  Routine consent
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    TextComponent notice_consent
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        NOTICE D’INFORMATION ET CONSENTEMENT ÉCLAIRÉ

        Appuyez sur la touche (Espace) pour continuer
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent_1
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    ImageComponent image_3
      image = resources/picConsent1.png
      pos = (0, 0.1)
      size = (1.1, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent press
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 2
      text = Appuyez sur la touche (Espace) pour continuer
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine consent_2
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    ImageComponent image_4
      image = resources/picConsent2.png
      pos = (0, 0.1)
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent press_2
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 2
      text = Appuyez sur la touche (Espace) pour continuer
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine give_consent
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    TextComponent press_3
      letterHeight = 0.05
      startVal [time (s)] = 0
      wrapWidth = 1.2
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      text:
        J’ai lu et compris les renseignements ci-dessus et j’accepte de plein gré de participer à cette recherche.

        Appuyez sur la touche (n) pour accepter, autrement veuillez quitter l'expérience en cliquant sur la touche (Echap) et fermer la fenêtre.

        Si vous souhaitez revoir la notice d'information, appuyez sur (c).
    KeyboardComponent consent_resp
      allowedKeys = 'c','n'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent code_7
      Code Type = Auto->JS
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      End Routine:
        if consent_resp.keys == 'n':
            consent_loop.finished = True
  Routine instructions_quest
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        Cette expérience se divise en deux parties :

        Premièrement, vous allez devoir remplir deux questionnaires (environ 5 minutes)

        Puis vous allez faire une tâche comprenant deux pauses (environ 10 minutes)

        Appuyez sur la touche (Espace) pour continuer
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine first_questionnaire
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    TextComponent questionnaire_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Questionnaire 1/2

        Appuyez sur la touche (Espace) pour continuer
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine panas_instructions
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    TextComponent panas_text_inst
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Cette échelle est constituée d'une liste de mots qui font état de certaines émotions ou sentiments.

        Lisez attentivement chacun de ces mots et indiquez spontanément "à l'aide de votre souris" à quel niveau vous vous sentez aujourd'hui. Pour ce faire, utilisez l'échelle ci dessous :

        1 = Très peu ou pas du tout ; 2 = Un peu ; 3 = Modérément
         4 = Beaucoup ; 5 = Énormément

        Appuyez sur la touche (Espace) pour continuer
    KeyboardComponent panas_resp_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine panas_precisions
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Précision :

        Veuillez cliquer à l'aide de votre souris sur l'échelle, au dessus du numéro correspondant à votre réponse.

        Appuyez sur la touche (Espace) pour commencer.
    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PANAS
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    TextComponent text_instructions_panas
      letterHeight = 0.045
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text:
        Indiquez votre état au cours de la SEMAINE DERNIERE
    TextComponent text_words
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    TextComponent label
      letterHeight = 0.045
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Très peu ou pas du tout     Un peu     Modérément     Beaucoup     Énormément
      wrapWidth = 2.8
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    SliderComponent slider_panas
      fillColor = 0.0902, -1.0000, -1.0000
      forceEndRoutine = True
      granularity = 1
      labels = '1','2','3','4','5'
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine second_questionnaire
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    TextComponent questionnaire2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Questionnaire 2/2

        Appuyez sur la touche (Espace) pour continuer
    KeyboardComponent quest2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine mathys_instructions_1
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    TextComponent text_10
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Cette échelle a pour but d'évaluer votre état au cours de la dernière semaine. Pour chaque item, indiquez également à l’aide de votre souris où vous pensez vous situer en fonction des deux propositions sachant que le centre du trait représente votre état habituel.

        Appuyez sur la touche (Espace) pour continuer
    KeyboardComponent mathys_start
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine mathys_1
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    TextComponent instructions_mathys
      letterHeight = 0.045
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Indiquez votre état au cours de la SEMAINE DERNIERE
      wrapWidth = 1.1
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    SliderComponent slider_mathys1
      fillColor = 0.0902, -1.0000, -1.0000
      forceEndRoutine = True
      granularity = 0.5
      letterHeight = 0.05
      saveStartStop = False
      size = (0.6, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,0.5,1,1.5,2,2.5,3,3.5,4,4.5,5,5.5,6,6.5,7,7.5,8,8.5,9,9.5,10)
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    TextComponent left
      letterHeight = 0.05
      pos = (-0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_side
      wrapWidth = 0.4
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    TextComponent right
      letterHeight = 0.05
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $right_side
      wrapWidth = 0.4
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  Routine mathys_instructions_2
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Au cours de cette même période, précisez quels types d’émotion vous avez ressentis, en précisant leur fréquence.

        Appuyez sur la touche (Espace) pour continuer
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mathys_2
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    TextComponent instr_mathys_2
      letterHeight = 0.045
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Indiquez votre état au cours de la SEMAINE DERNIERE
      wrapWidth = 1.1
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    TextComponent text_words_2
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $words_mathys
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    TextComponent label_mathys
      letterHeight = 0.045
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Jamais     Occasionnellement     Souvent     Très souvent     Constamment
      wrapWidth = 2.8
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    SliderComponent slider_mathys2
      fillColor = 0.0902, -1.0000, -1.0000
      forceEndRoutine = True
      granularity = 1
      letterHeight = 0.045
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine mathys_3
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    TextComponent math_instr_3
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Si vous avez ressenti d’autres émotions, veuillez les préciser ci-dessous en écrivant directement sur votre clavier. Appuyez sur (Espace) pour enregistrer votre réponse.
    TextboxComponent mathys3
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Ecrivez ici...
      pos = (0, -0.1)
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine start_instr_main
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Vous avez maintenant terminé la première partie de l'expérience.

        Nous allons maintenant passer à la deuxième partie.

        Appuyez sur la touche (Espace) pour continuer
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start
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    TextComponent start_exp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $randText5
      wrapWidth = 1.2
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    KeyboardComponent key_start_exp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stimuli_presentation
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [duration (frames)] = 48
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    ImageComponent image_1
      image [set every repeat] = $image1
      size = (0.4, 0.6)
      startVal [frame N] = 48
      stopVal [duration (frames)] = 5
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    ImageComponent image_2
      image [set every repeat] = $image2
      size = (0.4, 0.6)
      startVal [frame N] = 53
      stopVal [duration (frames)] = 5
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    ImageComponent mask
      image = resources/mask.png
      size = (0.4, 0.6)
      startVal [frame N] = 58
      stopVal [duration (frames)] = 3
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    KeyboardComponent responseMain
      allowedKeys = 'v','b'
      forceEndRoutine = True
      startVal [frame N] = 48
      stopVal [duration (frames)] = 180
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('image_1.tStart', image_1.tStart)
        thisExp.addData('image_2.tStart', image_2.tStart)
        thisExp.addData('mask.tStart', mask.tStart)
  Routine main_instructions_1
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        list_number = [1,2]
        shuffle(list_number)
        randomNumber = list_number[0]
        thisExp.addData('vb_positive',randomNumber)

        if randomNumber % 2:
            which_pos = "b_positive.xlsx"
        else:
            which_pos = "v_positive.xlsx"
        thisExp.addData('random_button',which_pos)
    TextComponent main_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text [set every repeat]:
        $randText1
    KeyboardComponent key_resp_beginning
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine break_2
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    TextComponent pause_txt_2
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        PAUSE (1 MINUTE)

        Vous êtes aux deux-tiers ! Il vous reste environ 3 minutes avant la fin !

        Si vous les souhaitez, vous pouvez dès à présent appuyez sur la touche (Espace) pour reprendre la tâche
    KeyboardComponent key_resp_27
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN != 288:
            continueRoutine = False
  Routine instructions_detection
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    TextComponent text_instructions_detection
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $randText2
    KeyboardComponent key_resp_detection
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine training
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    TextComponent text_training
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Nous allons commencer par quelques essais d'entraînement.

        Il y aura plusieurs répétitions, ne vous inquiétez pas si vous n’y arrivez pas dès le début, ceci est un entraînement. Ces réponses ne seront pas enregistrées.

        Soyez attentifs et fixez bien votre regard sur la croix blanche au centre de l'écran.

        Appuyez sur la touche (Espace) pour continuer
    KeyboardComponent key_resp_training
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine feedback_routine
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    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $randText3
      wrapWidth = 1.3
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    KeyboardComponent key_resp_22
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stimuli_presentation_training
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [duration (frames)] = 48
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    ImageComponent image
      image [set every repeat] = $image1
      size = (0.4, 0.6)
      startVal [frame N] = 48
      stopVal [duration (frames)] = 5
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    ImageComponent image_5
      image [set every repeat] = $image2
      size = (0.4, 0.6)
      startVal [frame N] = 53
      stopVal [duration (frames)] = 5
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    ImageComponent mask_2
      image = resources/mask.png
      size = (0.4, 0.6)
      startVal [frame N] = 58
      stopVal [duration (frames)] = 3
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    KeyboardComponent responseTraining
      allowedKeys = 'v','b'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [frame N] = 48
      stopVal [duration (frames)] = 180
      storeCorrect = True
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    TextComponent text_14
      letterHeight = 0.05
      startVal [frame N] = 251
      text [set every repeat] = $randText4
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    KeyboardComponent key_time_limit
      allowedKeys = 'space'
      correctAns = space
      forceEndRoutine = True
      startVal [frame N] = 240
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        #thisExp.addData('prime_exp.tStart', prime_exp.tStart)
        #thisExp.addData('supraliminal2.tStart', supraliminal2.tStart)
        #thisExp.addData('mask.tStart', mask.tStart)
  Routine conditional_feedback
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    CodeComponent code_feedback
      Code Type = Auto->JS
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      Begin Routine:
        if (responseTraining.corr == 1):
            feedbackText = "Vous avez répondu que le visage avait plutôt une expression Négative"
        elif (responseTraining.corr == 0):
            feedbackText = "Vous avez répondu que le visage avait plutôt une expression Positive"

        if (key_time_limit.corr == 1):
            continueRoutine = False
    TextComponent feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedbackText
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  Routine ready_to_start
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    TextComponent text_ready_to_start
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Si vous êtes prêt à commencer appuyez sur la touche (n)

        Si vous souhaitez reprendre l'entraînement, appuyez sur la touche (c)
    KeyboardComponent key_resp_ready_to_start
      allowedKeys = 'c','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
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    CodeComponent code_replay
      Code Type = Auto->JS
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      End Routine:
        if key_resp_ready_to_start.keys == 'n':
            training_loop.finished = True
  Routine thank_you
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    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Merci pour votre participation !

        Vous pouvez appuyer sur la touche (Espace) pour quitter l'expérience et enregistrer vos données.
    KeyboardComponent thanks_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stim_only
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    PolygonComponent polygon_3
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [frame N] = 0
      stopVal [duration (frames)] = 48
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    ImageComponent image_simple
      image [set every repeat] = $image1
      size = (0.4, 0.6)
      startVal [frame N] = 48
      stopVal [duration (frames)] = 5
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    KeyboardComponent responseSimple
      allowedKeys = 'v','b'
      forceEndRoutine = True
      startVal [frame N] = 48
      stopVal [duration (frames)] = 180
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  Routine break2
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    TextComponent pause_txt
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        PAUSE (1 MINUTE)

        Vous avez fait les deux tiers de cette partie, il vous reste environ 3 minutes avant la fin.

        Si vous les souhaitez, vous pouvez dès à présent appuyez sur la touche (Espace) pour reprendre la tâche
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN != 144:
            continueRoutine = False
  Routine break1
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    TextComponent pause_txt_3
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        PAUSE (1 MINUTE)

        Vous avez fait un tiers de cette partie, il vous reste environ 6 minutes avant la fin.

        Si vous les souhaitez, vous pouvez dès à présent appuyez sur la touche (Espace) pour reprendre la tâche
    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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Flow
  Routine welcome_screen
  Routine check_fr
  Routine stop_fr
  LoopInitiator consent_loop loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine consent
    Routine consent_1
    Routine consent_2
    Routine give_consent
  LoopTerminator consent_loop
  Routine instructions_quest
  Routine first_questionnaire
  Routine panas_instructions
  Routine panas_precisions
  LoopInitiator loop_PANAS loopType="TrialHandler"
    conditionsFile = PANAS.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'words': 'Intéressé(e)', 'valence': 'Positive'},
      {'words': 'En détresse', 'valence': 'Negative'},
      {'words': 'Excité(e)', 'valence': 'Positive'},
      {'words': 'Bouleversé(e)', 'valence': 'Negative'},
      {'words': 'Fort(e)', 'valence': 'Positive'},
      {'words': 'Coupable', 'valence': 'Negative'},
      {'words': 'Apeuré(e)', 'valence': 'Negative'},
      {'words': 'Hostile', 'valence': 'Negative'},
      {'words': 'Enthousiaste', 'valence': 'Positive'},
      {'words': 'Fier(ière)', 'valence': 'Positive'},
      {'words': 'Irritable', 'valence': 'Negative'},
      {'words': 'Vigilant(e)', 'valence': 'Negative'},
      {'words': 'Honteux(se)', 'valence': 'Negative'},
      {'words': 'Inspiré(e)', 'valence': 'Positive'},
      {'words': 'Nerveux(se)', 'valence': 'Negative'},
      {'words': 'Déterminé(e)', 'valence': 'Positive'},
      {'words': 'Attentif(ve)', 'valence': 'Positive'},
      {'words': 'Agité(e)', 'valence': 'Negative'},
      {'words': 'Actif(ve)', 'valence': 'Positive'},
      {'words': 'Craintif(ve)', 'valence': 'Negative'}]
    Routine PANAS
  LoopTerminator loop_PANAS
  Routine second_questionnaire
  Routine mathys_instructions_1
  LoopInitiator loop_mathys_1 loopType="TrialHandler"
    conditionsFile = mathys.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'left_side': 'Je suis moins sensible que d’habitude aux couleurs', 'right_side': 'Je suis plus sensible que d’habitude aux couleurs', 'item_type': 'SE', 'direction': 'normal'},
      {'left_side': 'Je manque de tonus', 'right_side': "J'ai une tension interne importante", 'item_type': 'MO', 'direction': 'normal'},
      {'left_side': "J'ai l'impression d'être anesthésié(e) sur le plan des émotions", 'right_side': "J'ai parfois le sentiment de perdre le contrôle de mes émotions", 'item_type': 'EM', 'direction': 'normal'},
      {'left_side': 'Je suis replié(e) sur moi', 'right_side': 'Je suis extraverti(e)', 'item_type': 'VO', 'direction': 'normal'},
      {'left_side': 'Je suis facilement distrait(e), la moindre chose attire mon attention', 'right_side': 'J’ai une fatigue attentionnelle et j’ai du mal à soutenir mon attention', 'item_type': 'CO', 'direction': 'inverse'},
      {'left_side': 'Je suis plus sensible que d’habitude au toucher', 'right_side': 'Je suis moins sensible que d’habitude au toucher', 'item_type': 'SE', 'direction': 'inverse'},
      {'left_side': 'J’ai l’impression que mon humeur varie beaucoup en fonction de mon environnement', 'right_side': 'Mon humeur est monotone et peu changeante', 'item_type': 'EM', 'direction': 'inverse'},
      {'left_side': 'Je suis particulièrement sensible à la musique', 'right_side': "Je suis plus indifférent que d'habitude à la musique", 'item_type': 'SE', 'direction': 'inverse'}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
    Routine mathys_1
  LoopTerminator loop_mathys_1
  Routine mathys_instructions_2
  LoopInitiator loop_mathys_2 loopType="TrialHandler"
    conditionsFile = mathys_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'words_mathys': 'Tristesse'},
      {'words_mathys': 'Joie'},
      {'words_mathys': 'Irritabilité'},
      {'words_mathys': 'Panique'},
      {'words_mathys': 'Anxiété'},
      {'words_mathys': 'Colère'},
      {'words_mathys': 'Exaltation'}]
    Routine mathys_2
  LoopTerminator loop_mathys_2
  Routine mathys_3
  Routine start_instr_main
  LoopInitiator which_positive loopType="TrialHandler"
    conditionsFile = $which_pos
    isTrials = False
    loopType = random
    nReps = 1
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    Routine main_instructions_1
    Routine instructions_detection
    Routine training
    Routine feedback_routine
    LoopInitiator training_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 3
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      LoopInitiator training_before loopType="TrialHandler"
        conditionsFile = training_stims.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'image1': 'resources/063_happy_BFS_4.6cpi_passe_bas_LUM.png', 'image2': 'resources/063_happy_HFS_27.6cpi_passe_haut_LUM.png', 'condition': 'LSF', 'target': 'happy', 'ind': 63},
          {'image1': 'resources/099_sad_HFS_27.6cpi_passe_haut_LUM.png', 'image2': 'resources/099_sad_BFS_4.6cpi_passe_bas_LUM.png', 'condition': 'HSF', 'target': 'sad', 'ind': 99},
          {'image1': 'resources/105_morph_BFS_4.6cpi_passe_bas_LUM.png', 'image2': 'resources/105_morph_HFS_27.6cpi_passe_haut_LUM.png', 'condition': 'LSF', 'target': 'morph', 'ind': 105},
          {'image1': 'resources/037_morph_HFS_27.6cpi_passe_haut_LUM.png', 'image2': 'resources/037_morph_BFS_4.6cpi_passe_bas_LUM.png', 'condition': 'HSF', 'target': 'morph', 'ind': 37},
          {'image1': 'resources/006_happy_HFS_27.6cpi_passe_haut_LUM.png', 'image2': 'resources/006_happy_BFS_4.6cpi_passe_bas_LUM.png', 'condition': 'HSF', 'target': 'happy', 'ind': 6},
          {'image1': 'resources/167_sad_BFS_4.6cpi_passe_bas_LUM.png', 'image2': 'resources/167_sad_HFS_27.6cpi_passe_haut_LUM.png', 'condition': 'LSF', 'target': 'sad', 'ind': 167}]
        Routine stimuli_presentation_training
        Routine conditional_feedback
      LoopTerminator training_before
      Routine ready_to_start
    LoopTerminator training_loop
    Routine start
    LoopInitiator trials_simple loopType="TrialHandler"
      conditionsFile = $stim_main
      loopType = sequential
      nReps = 1
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      Routine stim_only
    LoopTerminator trials_simple
    Routine break1
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $stim_main
      loopType = sequential
      nReps = 2
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      Routine stimuli_presentation
      Routine break2
    LoopTerminator trials
  LoopTerminator which_positive
  Routine thank_you
